<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0-alpha012"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StimThreshold" />
        <Property Name="DelayToStim" />
        <Property Name="StimId" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>OptoStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentPosition</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Z</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimThreshold" />
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="FloatProperty">
                <Value>5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>RewardEnabled?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RewardScheduleEnabled</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="BitwiseAnd" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="DelayToStim" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT1S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimId" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CurrentOptoStimId</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>GiveOptoStim</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>